<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.4.0">
  <Workflow xmlns:xsd="http://www.w3.org/2001/XMLSchema" xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance" xmlns:q1="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders" xmlns:q2="clr-namespace:Bonsai.VR;assembly=Bonsai.VR" xmlns:q3="clr-namespace:Bonsai.Scripting;assembly=Bonsai.Scripting" xmlns:q4="clr-namespace:Bonsai.HiveTracker;assembly=Bonsai.HiveTracker" xmlns:q5="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp" xmlns="https://horizongir.org/bonsai">
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:RenderFrame" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q2:GetDevicePoses" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="Zip" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q2:SubmitTextures" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:DrawFramebuffer">
          <q1:RenderState />
          <q1:FramebufferAttachments />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="Zip" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Source.RightViewMatrix,Source.RightProjectionMatrix</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q2:DrawFramebuffer">
          <q2:RenderState />
          <q2:ClearColor>Black</q2:ClearColor>
          <q2:ClearMask>DepthBufferBit ColorBufferBit</q2:ClearMask>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:UpdateFrame" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q2:GetControllerState">
          <q2:Index xsi:nil="true" />
          <q2:ControllerRole>LeftHand</q2:ControllerRole>
        </Combinator>
      </Expression>
      <Expression xsi:type="Sink">
        <Name>DrawController</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="SubscribeSubject">
              <Name>Draw</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Source.DevicePose</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="CombineLatest" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Source.Item1</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="Sample" />
            </Expression>
            <Expression xsi:type="Multiply" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q1:UpdateUniform">
                <q1:UniformName>modelview</q1:UniformName>
                <q1:ShaderName>Controller</q1:ShaderName>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q1:DrawMesh">
                <q1:ShaderName>Controller</q1:ShaderName>
                <q1:MeshName>Controller</q1:MeshName>
              </Combinator>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Source.Item2</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="Zip" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q1:UpdateUniform">
                <q1:UniformName>projection</q1:UniformName>
                <q1:ShaderName>Controller</q1:ShaderName>
              </Combinator>
            </Expression>
          </Nodes>
          <Edges>
            <Edge>
              <From>0</From>
              <To>3</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>2</From>
              <To>5</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>2</From>
              <To>10</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>3</From>
              <To>4</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>4</From>
              <To>6</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>5</From>
              <To>4</To>
              <Label>Source2</Label>
            </Edge>
            <Edge>
              <From>5</From>
              <To>6</To>
              <Label>Source2</Label>
            </Edge>
            <Edge>
              <From>6</From>
              <To>7</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>7</From>
              <To>8</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>8</From>
              <To>11</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>9</From>
              <To>1</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>10</From>
              <To>12</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>11</From>
              <To>9</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>12</From>
              <To>11</To>
              <Label>Source2</Label>
            </Edge>
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>DevicePoses</Name>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>Draw</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q2:DrawFramebuffer">
          <q2:RenderState />
          <q2:ClearColor>Black</q2:ClearColor>
          <q2:ClearMask>DepthBufferBit ColorBufferBit</q2:ClearMask>
        </Combinator>
      </Expression>
      <Expression xsi:type="PublishSubject">
        <Name>DevicePoses</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q2:GetHmdState">
          <q2:NearClip>0.1</q2:NearClip>
          <q2:FarClip>100</q2:FarClip>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Source.LeftViewMatrix,Source.LeftProjectionMatrix</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Source.RightViewMatrix,Source.RightProjectionMatrix</Selector>
      </Expression>
      <Expression xsi:type="PublishSubject">
        <Name>Draw</Name>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>Draw</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>DevicePoses</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q2:GetControllerState">
          <q2:Index xsi:nil="true" />
          <q2:ControllerRole>RightHand</q2:ControllerRole>
        </Combinator>
      </Expression>
      <Expression xsi:type="Sink">
        <Name>DrawController</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="SubscribeSubject">
              <Name>Draw</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="CombineLatest" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Source.Item1</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="Sample" />
            </Expression>
            <Expression xsi:type="Multiply" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q1:UpdateUniform">
                <q1:UniformName>modelview</q1:UniformName>
                <q1:ShaderName>Controller</q1:ShaderName>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q1:DrawMesh">
                <q1:ShaderName>Controller</q1:ShaderName>
                <q1:MeshName>Controller</q1:MeshName>
              </Combinator>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Source.Item2</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="Zip" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q1:UpdateUniform">
                <q1:UniformName>projection</q1:UniformName>
                <q1:ShaderName>Controller</q1:ShaderName>
              </Combinator>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Source.DevicePose</Selector>
            </Expression>
          </Nodes>
          <Edges>
            <Edge>
              <From>0</From>
              <To>12</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>2</From>
              <To>4</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>2</From>
              <To>9</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>3</From>
              <To>5</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>4</From>
              <To>3</To>
              <Label>Source2</Label>
            </Edge>
            <Edge>
              <From>4</From>
              <To>5</To>
              <Label>Source2</Label>
            </Edge>
            <Edge>
              <From>5</From>
              <To>6</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>6</From>
              <To>7</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>7</From>
              <To>10</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>8</From>
              <To>1</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>9</From>
              <To>11</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>10</From>
              <To>8</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>11</From>
              <To>10</To>
              <Label>Source2</Label>
            </Edge>
            <Edge>
              <From>12</From>
              <To>3</To>
              <Label>Source1</Label>
            </Edge>
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Sink">
        <Name>DrawSphere</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="SubscribeSubject">
              <Name>Draw</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="CombineLatest" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Source.Item1</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="Sample" />
            </Expression>
            <Expression xsi:type="Multiply" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q1:UpdateUniform">
                <q1:UniformName>modelview</q1:UniformName>
                <q1:ShaderName>Sphere</q1:ShaderName>
              </Combinator>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Source.Item2</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="Zip" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q1:UpdateUniform">
                <q1:UniformName>projection</q1:UniformName>
                <q1:ShaderName>Sphere</q1:ShaderName>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q1:DrawMesh">
                <q1:ShaderName>Sphere</q1:ShaderName>
                <q1:MeshName>Sphere</q1:MeshName>
              </Combinator>
            </Expression>
          </Nodes>
          <Edges>
            <Edge>
              <From>0</From>
              <To>3</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>2</From>
              <To>4</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>2</From>
              <To>8</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>3</From>
              <To>5</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>4</From>
              <To>3</To>
              <Label>Source2</Label>
            </Edge>
            <Edge>
              <From>4</From>
              <To>5</To>
              <Label>Source2</Label>
            </Edge>
            <Edge>
              <From>5</From>
              <To>6</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>6</From>
              <To>7</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>7</From>
              <To>9</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>8</From>
              <To>10</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>9</From>
              <To>11</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>10</From>
              <To>9</To>
              <Label>Source2</Label>
            </Edge>
            <Edge>
              <From>11</From>
              <To>1</To>
              <Label>Source1</Label>
            </Edge>
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:CreateTransform">
          <q1:Position>
            <q1:X>-1.14555836</q1:X>
            <q1:Y>0.9115119</q1:Y>
            <q1:Z>0.0569871962</q1:Z>
          </q1:Position>
          <q1:Rotation>
            <q1:Xyz>
              <q1:X>0</q1:X>
              <q1:Y>0</q1:Y>
              <q1:Z>0</q1:Z>
            </q1:Xyz>
            <q1:W>1</q1:W>
          </q1:Rotation>
          <q1:Scale>
            <q1:X>0.02</q1:X>
            <q1:Y>0.02</q1:Y>
            <q1:Z>0.02</q1:Z>
          </q1:Scale>
        </Combinator>
      </Expression>
      <Expression xsi:type="Sink">
        <Name>DrawTrackingReference</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="SubscribeSubject">
              <Name>Draw</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="CombineLatest" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Source.Item1</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="Sample" />
            </Expression>
            <Expression xsi:type="Multiply" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q1:UpdateUniform">
                <q1:UniformName>modelview</q1:UniformName>
                <q1:ShaderName>Basestation</q1:ShaderName>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q1:DrawMesh">
                <q1:ShaderName>Basestation</q1:ShaderName>
                <q1:MeshName>Basestation</q1:MeshName>
              </Combinator>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Source.Item2</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="Zip" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q1:UpdateUniform">
                <q1:UniformName>projection</q1:UniformName>
                <q1:ShaderName>Basestation</q1:ShaderName>
              </Combinator>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Source.DevicePose</Selector>
            </Expression>
          </Nodes>
          <Edges>
            <Edge>
              <From>0</From>
              <To>12</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>2</From>
              <To>4</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>2</From>
              <To>9</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>3</From>
              <To>5</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>4</From>
              <To>3</To>
              <Label>Source2</Label>
            </Edge>
            <Edge>
              <From>4</From>
              <To>5</To>
              <Label>Source2</Label>
            </Edge>
            <Edge>
              <From>5</From>
              <To>6</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>6</From>
              <To>7</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>7</From>
              <To>10</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>8</From>
              <To>1</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>9</From>
              <To>11</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>10</From>
              <To>8</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>11</From>
              <To>10</To>
              <Label>Source2</Label>
            </Edge>
            <Edge>
              <From>12</From>
              <To>3</To>
              <Label>Source1</Label>
            </Edge>
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Sink">
        <Name>DrawTrackingReference</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="SubscribeSubject">
              <Name>Draw</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="CombineLatest" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Source.Item1</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="Sample" />
            </Expression>
            <Expression xsi:type="Multiply" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q1:UpdateUniform">
                <q1:UniformName>modelview</q1:UniformName>
                <q1:ShaderName>Basestation</q1:ShaderName>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q1:DrawMesh">
                <q1:ShaderName>Basestation</q1:ShaderName>
                <q1:MeshName>Basestation</q1:MeshName>
              </Combinator>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Source.Item2</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="Zip" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q1:UpdateUniform">
                <q1:UniformName>projection</q1:UniformName>
                <q1:ShaderName>Basestation</q1:ShaderName>
              </Combinator>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Source.DevicePose</Selector>
            </Expression>
          </Nodes>
          <Edges>
            <Edge>
              <From>0</From>
              <To>12</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>2</From>
              <To>4</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>2</From>
              <To>9</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>3</From>
              <To>5</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>4</From>
              <To>3</To>
              <Label>Source2</Label>
            </Edge>
            <Edge>
              <From>4</From>
              <To>5</To>
              <Label>Source2</Label>
            </Edge>
            <Edge>
              <From>5</From>
              <To>6</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>6</From>
              <To>7</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>7</From>
              <To>10</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>8</From>
              <To>1</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>9</From>
              <To>11</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>10</From>
              <To>8</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>11</From>
              <To>10</To>
              <Label>Source2</Label>
            </Edge>
            <Edge>
              <From>12</From>
              <To>3</To>
              <Label>Source1</Label>
            </Edge>
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>DevicePoses</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q2:GetTrackingReference">
          <q2:Index>0</q2:Index>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q2:GetTrackingReference">
          <q2:Index>1</q2:Index>
        </Combinator>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>DevicePoses</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="Sample" />
      </Expression>
      <Expression xsi:type="q3:PythonTransform">
        <q3:Script>import clr
clr.AddReference("OpenTK")
from OpenTK import Vector3, Matrix4
from math import sin, cos, pi

state = Vector3.Zero

  #CLOCKS_PER_MICROSECOND = 24
  
def computeAngle(delta,CLOCKS_PER_MICROSECOND):
  return (delta - 4000.0 * CLOCKS_PER_MICROSECOND) * pi / (8333 * CLOCKS_PER_MICROSECOND)


@returns(Vector3)
def process(value):
  global state

  # base = value.Item1.Item0
  # axis = value.Item1.Item1 
  deltaBase0Axis0 = value.Item3[1]
  deltaBase0Axis1 = value.Item4[1]
  deltaBase1Axis0 = value.Item1[1]
  deltaBase1Axis1 = value.Item2[1]
  clocksPerMicrosecond = 1
  valid = deltaBase0Axis0 &lt; 9000 and deltaBase0Axis1 &lt; 9000 and deltaBase1Axis0 &lt; 9000 and deltaBase1Axis1 &lt; 9000

  v1 = computeAngle(deltaBase0Axis0, clocksPerMicrosecond) # this is vertical angle (base 0)
  h1 = computeAngle(deltaBase0Axis1, clocksPerMicrosecond) # this is horizontal angle (base 1)
  
  v2 = computeAngle(deltaBase1Axis0, clocksPerMicrosecond) # this is vertical angle
  h2 = computeAngle(deltaBase1Axis1, clocksPerMicrosecond) # this is horizontal angle

  # these are the Matrix4 for each lighthouse
  m1 = value.Item5
  m2 = value.Item6
  
  # STEP1: convert polar coordinates to cartesian coordinates (vector)
  vecH1 = Vector3(0, cos(h1), sin(h1))
  vecV1 = Vector3(cos(v1), 0, -sin(v1))

  vecH2 = Vector3(0, cos(h2), sin(h2))
  vecV2 = Vector3(cos(v2), 0, -sin(v2))

  # STEP2: cross-product defines direction of horizontal and vertical line
  u = Vector3.Cross(vecH1, vecV1)
  v = Vector3.Cross(vecH2, vecV2)

  # STEP3: transform line from relative coordinates to global lighthouse coordinate system (defined by matrix) (multiply vector by matrix)
  u = Vector3.TransformVector(u, m1)
  v = Vector3.TransformVector(v, m2)
  p0 = Vector3.TransformPosition(Vector3.Zero, m1)
  q0 = Vector3.TransformPosition(Vector3.Zero, m2)

  # STEP4: line-line intersection by dot product minimization
  w0 = p0 - q0
  a = Vector3.Dot(u, u)
  b = Vector3.Dot(u, v)
  c = Vector3.Dot(v, v)
  d = Vector3.Dot(u, w0)
  e = Vector3.Dot(v, w0)

  denom = a * c - b * b
  if valid and denom &gt;= 1e-6:
    s = (e * b - c * d) / denom
    t = (a * e - b * d) / denom

    pS = p0 + s * u
    qT = q0 + t * v

    state = (pS + qT) / 2
  return state</q3:Script>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Source.DevicePose</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Source.Capture</Selector>
      </Expression>
      <Expression xsi:type="Condition">
        <Name>Base: 0 Axis: 0</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="MemberSelector">
              <Selector>Source.BaseId</Selector>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Source.Axis</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="Zip" />
            </Expression>
            <Expression xsi:type="LogicalAnd" />
            <Expression xsi:type="Equal">
              <Operand xsi:type="IntProperty">
                <Value>0</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Equal">
              <Operand xsi:type="IntProperty">
                <Value>0</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="ExternalizedProperty">
              <MemberName>Value</MemberName>
              <Name>BaseID</Name>
            </Expression>
            <Expression xsi:type="ExternalizedProperty">
              <MemberName>Value</MemberName>
              <Name>Axis</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge>
              <From>0</From>
              <To>2</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>0</From>
              <To>3</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>2</From>
              <To>6</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>3</From>
              <To>7</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>4</From>
              <To>5</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>5</From>
              <To>1</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>6</From>
              <To>4</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>7</From>
              <To>4</To>
              <Label>Source2</Label>
            </Edge>
            <Edge>
              <From>8</From>
              <To>6</To>
              <Label>Source2</Label>
            </Edge>
            <Edge>
              <From>9</From>
              <To>7</To>
              <Label>Source2</Label>
            </Edge>
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Condition">
        <Name>Base: 0 Axis: 1</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="MemberSelector">
              <Selector>Source.BaseId</Selector>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Source.Axis</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="Zip" />
            </Expression>
            <Expression xsi:type="LogicalAnd" />
            <Expression xsi:type="Equal">
              <Operand xsi:type="IntProperty">
                <Value>0</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Equal">
              <Operand xsi:type="IntProperty">
                <Value>1</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="ExternalizedProperty">
              <MemberName>Value</MemberName>
              <Name>BaseID</Name>
            </Expression>
            <Expression xsi:type="ExternalizedProperty">
              <MemberName>Value</MemberName>
              <Name>Axis</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge>
              <From>0</From>
              <To>2</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>0</From>
              <To>3</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>2</From>
              <To>6</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>3</From>
              <To>7</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>4</From>
              <To>5</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>5</From>
              <To>1</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>6</From>
              <To>4</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>7</From>
              <To>4</To>
              <Label>Source2</Label>
            </Edge>
            <Edge>
              <From>8</From>
              <To>6</To>
              <Label>Source2</Label>
            </Edge>
            <Edge>
              <From>9</From>
              <To>7</To>
              <Label>Source2</Label>
            </Edge>
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Condition">
        <Name>Base: 1 Axis: 0</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="MemberSelector">
              <Selector>Source.BaseId</Selector>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Source.Axis</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="Zip" />
            </Expression>
            <Expression xsi:type="LogicalAnd" />
            <Expression xsi:type="Equal">
              <Operand xsi:type="IntProperty">
                <Value>1</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Equal">
              <Operand xsi:type="IntProperty">
                <Value>0</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="ExternalizedProperty">
              <MemberName>Value</MemberName>
              <Name>BaseID</Name>
            </Expression>
            <Expression xsi:type="ExternalizedProperty">
              <MemberName>Value</MemberName>
              <Name>Axis</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge>
              <From>0</From>
              <To>2</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>0</From>
              <To>3</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>2</From>
              <To>6</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>3</From>
              <To>7</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>4</From>
              <To>5</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>5</From>
              <To>1</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>6</From>
              <To>4</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>7</From>
              <To>4</To>
              <Label>Source2</Label>
            </Edge>
            <Edge>
              <From>8</From>
              <To>6</To>
              <Label>Source2</Label>
            </Edge>
            <Edge>
              <From>9</From>
              <To>7</To>
              <Label>Source2</Label>
            </Edge>
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Condition">
        <Name>Base: 1 Axis: 1</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="MemberSelector">
              <Selector>Source.BaseId</Selector>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Source.Axis</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="Zip" />
            </Expression>
            <Expression xsi:type="LogicalAnd" />
            <Expression xsi:type="Equal">
              <Operand xsi:type="IntProperty">
                <Value>1</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Equal">
              <Operand xsi:type="IntProperty">
                <Value>1</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="ExternalizedProperty">
              <MemberName>Value</MemberName>
              <Name>BaseID</Name>
            </Expression>
            <Expression xsi:type="ExternalizedProperty">
              <MemberName>Value</MemberName>
              <Name>Axis</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge>
              <From>0</From>
              <To>2</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>0</From>
              <To>3</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>2</From>
              <To>6</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>3</From>
              <To>7</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>4</From>
              <To>5</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>5</From>
              <To>1</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>6</From>
              <To>4</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>7</From>
              <To>4</To>
              <Label>Source2</Label>
            </Edge>
            <Edge>
              <From>8</From>
              <To>6</To>
              <Label>Source2</Label>
            </Edge>
            <Edge>
              <From>9</From>
              <To>7</To>
              <Label>Source2</Label>
            </Edge>
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q4:BinaryCapture">
          <q4:PortName>COM3</q4:PortName>
          <q4:BaudRate>230400</q4:BaudRate>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="CombineLatest" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Source.DevicePose</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Source.Capture</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Source.Capture</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Source.Capture</Selector>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
      <Expression xsi:type="InputMapping">
        <PropertyMappings>
          <Property name="Position" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Sink">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="NestedWorkflow">
              <Name>Base: 0 Axis: 0</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="q5:ConvertFromArray">
                      <q5:Size>
                        <q5:Width>1</q5:Width>
                        <q5:Height>4</q5:Height>
                      </q5:Size>
                      <q5:Depth>F32</q5:Depth>
                      <q5:Channels>1</q5:Channels>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Source.Capture</Selector>
                  </Expression>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge>
                    <From>0</From>
                    <To>3</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>1</From>
                    <To>0</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>2</From>
                    <To>1</To>
                    <Label>Source1</Label>
                  </Edge>
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="NestedWorkflow">
              <Name>Base: 0 Axis: 1</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="q5:ConvertFromArray">
                      <q5:Size>
                        <q5:Width>1</q5:Width>
                        <q5:Height>4</q5:Height>
                      </q5:Size>
                      <q5:Depth>F32</q5:Depth>
                      <q5:Channels>1</q5:Channels>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Source.Capture</Selector>
                  </Expression>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge>
                    <From>0</From>
                    <To>3</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>1</From>
                    <To>0</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>2</From>
                    <To>1</To>
                    <Label>Source1</Label>
                  </Edge>
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="NestedWorkflow">
              <Name>Base: 1 Axis: 0</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="q5:ConvertFromArray">
                      <q5:Size>
                        <q5:Width>1</q5:Width>
                        <q5:Height>4</q5:Height>
                      </q5:Size>
                      <q5:Depth>F32</q5:Depth>
                      <q5:Channels>1</q5:Channels>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Source.Capture</Selector>
                  </Expression>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge>
                    <From>0</From>
                    <To>3</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>1</From>
                    <To>0</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>2</From>
                    <To>1</To>
                    <Label>Source1</Label>
                  </Edge>
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="NestedWorkflow">
              <Name>Base: 1 Axis: 1</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="q5:ConvertFromArray">
                      <q5:Size>
                        <q5:Width>1</q5:Width>
                        <q5:Height>4</q5:Height>
                      </q5:Size>
                      <q5:Depth>F32</q5:Depth>
                      <q5:Channels>1</q5:Channels>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Source.Capture</Selector>
                  </Expression>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge>
                    <From>0</From>
                    <To>3</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>1</From>
                    <To>0</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>2</From>
                    <To>1</To>
                    <Label>Source1</Label>
                  </Edge>
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Condition">
              <Name>Base: 0 Axis: 0</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                  <Expression xsi:type="MemberSelector">
                    <Selector>Source.BaseId</Selector>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Source.Axis</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="Zip" />
                  </Expression>
                  <Expression xsi:type="LogicalAnd" />
                  <Expression xsi:type="Equal">
                    <Operand xsi:type="IntProperty">
                      <Value>0</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="Equal">
                    <Operand xsi:type="IntProperty">
                      <Value>0</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="ExternalizedProperty">
                    <MemberName>Value</MemberName>
                    <Name>BaseID</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedProperty">
                    <MemberName>Value</MemberName>
                    <Name>Axis</Name>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge>
                    <From>0</From>
                    <To>2</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>0</From>
                    <To>3</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>2</From>
                    <To>6</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>3</From>
                    <To>7</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>4</From>
                    <To>5</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>5</From>
                    <To>1</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>6</From>
                    <To>4</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>7</From>
                    <To>4</To>
                    <Label>Source2</Label>
                  </Edge>
                  <Edge>
                    <From>8</From>
                    <To>6</To>
                    <Label>Source2</Label>
                  </Edge>
                  <Edge>
                    <From>9</From>
                    <To>7</To>
                    <Label>Source2</Label>
                  </Edge>
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Condition">
              <Name>Base: 0 Axis: 1</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                  <Expression xsi:type="MemberSelector">
                    <Selector>Source.BaseId</Selector>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Source.Axis</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="Zip" />
                  </Expression>
                  <Expression xsi:type="LogicalAnd" />
                  <Expression xsi:type="Equal">
                    <Operand xsi:type="IntProperty">
                      <Value>0</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="Equal">
                    <Operand xsi:type="IntProperty">
                      <Value>1</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="ExternalizedProperty">
                    <MemberName>Value</MemberName>
                    <Name>BaseID</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedProperty">
                    <MemberName>Value</MemberName>
                    <Name>Axis</Name>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge>
                    <From>0</From>
                    <To>2</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>0</From>
                    <To>3</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>2</From>
                    <To>6</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>3</From>
                    <To>7</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>4</From>
                    <To>5</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>5</From>
                    <To>1</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>6</From>
                    <To>4</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>7</From>
                    <To>4</To>
                    <Label>Source2</Label>
                  </Edge>
                  <Edge>
                    <From>8</From>
                    <To>6</To>
                    <Label>Source2</Label>
                  </Edge>
                  <Edge>
                    <From>9</From>
                    <To>7</To>
                    <Label>Source2</Label>
                  </Edge>
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Condition">
              <Name>Base: 1 Axis: 0</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                  <Expression xsi:type="MemberSelector">
                    <Selector>Source.BaseId</Selector>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Source.Axis</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="Zip" />
                  </Expression>
                  <Expression xsi:type="LogicalAnd" />
                  <Expression xsi:type="Equal">
                    <Operand xsi:type="IntProperty">
                      <Value>1</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="Equal">
                    <Operand xsi:type="IntProperty">
                      <Value>0</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="ExternalizedProperty">
                    <MemberName>Value</MemberName>
                    <Name>BaseID</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedProperty">
                    <MemberName>Value</MemberName>
                    <Name>Axis</Name>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge>
                    <From>0</From>
                    <To>2</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>0</From>
                    <To>3</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>2</From>
                    <To>6</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>3</From>
                    <To>7</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>4</From>
                    <To>5</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>5</From>
                    <To>1</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>6</From>
                    <To>4</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>7</From>
                    <To>4</To>
                    <Label>Source2</Label>
                  </Edge>
                  <Edge>
                    <From>8</From>
                    <To>6</To>
                    <Label>Source2</Label>
                  </Edge>
                  <Edge>
                    <From>9</From>
                    <To>7</To>
                    <Label>Source2</Label>
                  </Edge>
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Condition">
              <Name>Base: 1 Axis: 1</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                  <Expression xsi:type="MemberSelector">
                    <Selector>Source.BaseId</Selector>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Source.Axis</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="Zip" />
                  </Expression>
                  <Expression xsi:type="LogicalAnd" />
                  <Expression xsi:type="Equal">
                    <Operand xsi:type="IntProperty">
                      <Value>1</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="Equal">
                    <Operand xsi:type="IntProperty">
                      <Value>1</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="ExternalizedProperty">
                    <MemberName>Value</MemberName>
                    <Name>BaseID</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedProperty">
                    <MemberName>Value</MemberName>
                    <Name>Axis</Name>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge>
                    <From>0</From>
                    <To>2</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>0</From>
                    <To>3</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>2</From>
                    <To>6</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>3</From>
                    <To>7</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>4</From>
                    <To>5</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>5</From>
                    <To>1</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>6</From>
                    <To>4</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>7</From>
                    <To>4</To>
                    <Label>Source2</Label>
                  </Edge>
                  <Edge>
                    <From>8</From>
                    <To>6</To>
                    <Label>Source2</Label>
                  </Edge>
                  <Edge>
                    <From>9</From>
                    <To>7</To>
                    <Label>Source2</Label>
                  </Edge>
                </Edges>
              </Workflow>
            </Expression>
          </Nodes>
          <Edges>
            <Edge>
              <From>0</From>
              <To>5</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>0</From>
              <To>6</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>0</From>
              <To>7</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>0</From>
              <To>8</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>5</From>
              <To>1</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>6</From>
              <To>2</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>7</From>
              <To>3</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>8</From>
              <To>4</To>
              <Label>Source1</Label>
            </Edge>
          </Edges>
        </Workflow>
      </Expression>
    </Nodes>
    <Edges>
      <Edge>
        <From>0</From>
        <To>1</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>1</From>
        <To>14</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>2</From>
        <To>45</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>3</From>
        <To>2</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>4</From>
        <To>2</To>
        <Label>Source2</Label>
      </Edge>
      <Edge>
        <From>5</From>
        <To>3</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>6</From>
        <To>12</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>7</From>
        <To>5</To>
        <Label>Source2</Label>
      </Edge>
      <Edge>
        <From>9</From>
        <To>10</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>11</From>
        <To>9</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>12</From>
        <To>4</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>13</From>
        <To>5</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>14</From>
        <To>15</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>15</From>
        <To>16</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>15</From>
        <To>17</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>15</From>
        <To>6</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>16</From>
        <To>18</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>17</From>
        <To>19</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>18</From>
        <To>13</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>19</From>
        <To>7</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>20</From>
        <To>21</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>21</From>
        <To>22</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>24</From>
        <To>23</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>25</From>
        <To>33</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>26</From>
        <To>41</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>27</From>
        <To>28</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>28</From>
        <To>25</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>29</From>
        <To>26</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>30</From>
        <To>29</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>31</From>
        <To>32</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>32</From>
        <To>46</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>33</From>
        <To>40</To>
        <Label>Source5</Label>
      </Edge>
      <Edge>
        <From>34</From>
        <To>40</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>35</From>
        <To>34</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>36</From>
        <To>42</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>37</From>
        <To>43</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>38</From>
        <To>44</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>39</From>
        <To>47</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>40</From>
        <To>31</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>41</From>
        <To>40</To>
        <Label>Source6</Label>
      </Edge>
      <Edge>
        <From>41</From>
        <To>31</To>
        <Label>Source2</Label>
      </Edge>
      <Edge>
        <From>42</From>
        <To>40</To>
        <Label>Source2</Label>
      </Edge>
      <Edge>
        <From>43</From>
        <To>40</To>
        <Label>Source3</Label>
      </Edge>
      <Edge>
        <From>44</From>
        <To>40</To>
        <Label>Source4</Label>
      </Edge>
      <Edge>
        <From>46</From>
        <To>24</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>47</From>
        <To>35</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>47</From>
        <To>36</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>47</From>
        <To>37</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>47</From>
        <To>38</To>
        <Label>Source1</Label>
      </Edge>
    </Edges>
  </Workflow>
  <ExtensionTypes>
    <Type>Bonsai.Shaders.RenderFrame, Bonsai.Shaders, Version=0.19.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.VR.GetDevicePoses, Bonsai.VR, Version=0.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.Zip, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.VR.SubmitTextures, Bonsai.VR, Version=0.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Shaders.DrawFramebuffer, Bonsai.Shaders, Version=0.19.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.VR.DrawFramebuffer, Bonsai.VR, Version=0.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Shaders.UpdateFrame, Bonsai.Shaders, Version=0.19.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.VR.GetControllerState, Bonsai.VR, Version=0.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.SinkBuilder, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.CombineLatest, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.Sample, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.MultiplyBuilder, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Shaders.UpdateUniform, Bonsai.Shaders, Version=0.19.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Shaders.DrawMesh, Bonsai.Shaders, Version=0.19.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.MulticastSubjectBuilder, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.VR.GetHmdState, Bonsai.VR, Version=0.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Shaders.CreateTransform, Bonsai.Shaders, Version=0.19.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.VR.GetTrackingReference, Bonsai.VR, Version=0.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Scripting.PythonTransform, Bonsai.Scripting, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.LogicalAndBuilder, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.EqualBuilder, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.IntProperty, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.HiveTracker.BinaryCapture, Bonsai.HiveTracker, Version=0.1.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Dsp.ConvertFromArray, Bonsai.Dsp, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
  </ExtensionTypes>
</WorkflowBuilder>