<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.4.0">
  <Workflow xmlns:xsd="http://www.w3.org/2001/XMLSchema" xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance" xmlns:q2="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp" xmlns:q1="clr-namespace:Bonsai.HiveTracker;assembly=Bonsai.HiveTracker" xmlns="https://horizongir.org/bonsai">
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:BinaryCapture">
          <q1:PortName>COM3</q1:PortName>
          <q1:BaudRate>230400</q1:BaudRate>
        </Combinator>
      </Expression>
      <Expression xsi:type="Condition">
        <Name>Base: 0 Axis: 0</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="MemberSelector">
              <Selector>Source.BaseId</Selector>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Source.Axis</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="Zip" />
            </Expression>
            <Expression xsi:type="LogicalAnd" />
            <Expression xsi:type="Equal">
              <Operand xsi:type="IntProperty">
                <Value>0</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Equal">
              <Operand xsi:type="IntProperty">
                <Value>0</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="ExternalizedProperty">
              <MemberName>Value</MemberName>
              <Name>BaseID</Name>
            </Expression>
            <Expression xsi:type="ExternalizedProperty">
              <MemberName>Value</MemberName>
              <Name>Axis</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge>
              <From>0</From>
              <To>2</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>0</From>
              <To>3</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>2</From>
              <To>6</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>3</From>
              <To>7</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>4</From>
              <To>5</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>5</From>
              <To>1</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>6</From>
              <To>4</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>7</From>
              <To>4</To>
              <Label>Source2</Label>
            </Edge>
            <Edge>
              <From>8</From>
              <To>6</To>
              <Label>Source2</Label>
            </Edge>
            <Edge>
              <From>9</From>
              <To>7</To>
              <Label>Source2</Label>
            </Edge>
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Condition">
        <Name>Base: 0 Axis: 1</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="MemberSelector">
              <Selector>Source.BaseId</Selector>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Source.Axis</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="Zip" />
            </Expression>
            <Expression xsi:type="LogicalAnd" />
            <Expression xsi:type="Equal">
              <Operand xsi:type="IntProperty">
                <Value>0</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Equal">
              <Operand xsi:type="IntProperty">
                <Value>1</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="ExternalizedProperty">
              <MemberName>Value</MemberName>
              <Name>BaseID</Name>
            </Expression>
            <Expression xsi:type="ExternalizedProperty">
              <MemberName>Value</MemberName>
              <Name>Axis</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge>
              <From>0</From>
              <To>2</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>0</From>
              <To>3</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>2</From>
              <To>6</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>3</From>
              <To>7</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>4</From>
              <To>5</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>5</From>
              <To>1</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>6</From>
              <To>4</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>7</From>
              <To>4</To>
              <Label>Source2</Label>
            </Edge>
            <Edge>
              <From>8</From>
              <To>6</To>
              <Label>Source2</Label>
            </Edge>
            <Edge>
              <From>9</From>
              <To>7</To>
              <Label>Source2</Label>
            </Edge>
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Condition">
        <Name>Base: 1 Axis: 0</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="MemberSelector">
              <Selector>Source.BaseId</Selector>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Source.Axis</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="Zip" />
            </Expression>
            <Expression xsi:type="LogicalAnd" />
            <Expression xsi:type="Equal">
              <Operand xsi:type="IntProperty">
                <Value>1</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Equal">
              <Operand xsi:type="IntProperty">
                <Value>0</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="ExternalizedProperty">
              <MemberName>Value</MemberName>
              <Name>BaseID</Name>
            </Expression>
            <Expression xsi:type="ExternalizedProperty">
              <MemberName>Value</MemberName>
              <Name>Axis</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge>
              <From>0</From>
              <To>2</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>0</From>
              <To>3</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>2</From>
              <To>6</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>3</From>
              <To>7</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>4</From>
              <To>5</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>5</From>
              <To>1</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>6</From>
              <To>4</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>7</From>
              <To>4</To>
              <Label>Source2</Label>
            </Edge>
            <Edge>
              <From>8</From>
              <To>6</To>
              <Label>Source2</Label>
            </Edge>
            <Edge>
              <From>9</From>
              <To>7</To>
              <Label>Source2</Label>
            </Edge>
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Condition">
        <Name>Base: 1 Axis: 1</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="MemberSelector">
              <Selector>Source.BaseId</Selector>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Source.Axis</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="Zip" />
            </Expression>
            <Expression xsi:type="LogicalAnd" />
            <Expression xsi:type="Equal">
              <Operand xsi:type="IntProperty">
                <Value>1</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Equal">
              <Operand xsi:type="IntProperty">
                <Value>1</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="ExternalizedProperty">
              <MemberName>Value</MemberName>
              <Name>BaseID</Name>
            </Expression>
            <Expression xsi:type="ExternalizedProperty">
              <MemberName>Value</MemberName>
              <Name>Axis</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge>
              <From>0</From>
              <To>2</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>0</From>
              <To>3</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>2</From>
              <To>6</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>3</From>
              <To>7</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>4</From>
              <To>5</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>5</From>
              <To>1</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>6</From>
              <To>4</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>7</From>
              <To>4</To>
              <Label>Source2</Label>
            </Edge>
            <Edge>
              <From>8</From>
              <To>6</To>
              <Label>Source2</Label>
            </Edge>
            <Edge>
              <From>9</From>
              <To>7</To>
              <Label>Source2</Label>
            </Edge>
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="NestedWorkflow">
        <Name>Base: 1 Axis: 1</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q2:ConvertFromArray">
                <q2:Size>
                  <q2:Width>1</q2:Width>
                  <q2:Height>4</q2:Height>
                </q2:Size>
                <q2:Depth>F32</q2:Depth>
                <q2:Channels>1</q2:Channels>
              </Combinator>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Source.Capture</Selector>
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge>
              <From>0</From>
              <To>3</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>1</From>
              <To>0</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>2</From>
              <To>1</To>
              <Label>Source1</Label>
            </Edge>
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="NestedWorkflow">
        <Name>Base: 1 Axis: 0</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q2:ConvertFromArray">
                <q2:Size>
                  <q2:Width>1</q2:Width>
                  <q2:Height>4</q2:Height>
                </q2:Size>
                <q2:Depth>F32</q2:Depth>
                <q2:Channels>1</q2:Channels>
              </Combinator>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Source.Capture</Selector>
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge>
              <From>0</From>
              <To>3</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>1</From>
              <To>0</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>2</From>
              <To>1</To>
              <Label>Source1</Label>
            </Edge>
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="NestedWorkflow">
        <Name>Base: 0 Axis: 1</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q2:ConvertFromArray">
                <q2:Size>
                  <q2:Width>1</q2:Width>
                  <q2:Height>4</q2:Height>
                </q2:Size>
                <q2:Depth>F32</q2:Depth>
                <q2:Channels>1</q2:Channels>
              </Combinator>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Source.Capture</Selector>
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge>
              <From>0</From>
              <To>3</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>1</From>
              <To>0</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>2</From>
              <To>1</To>
              <Label>Source1</Label>
            </Edge>
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="NestedWorkflow">
        <Name>Base: 0 Axis: 0</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q2:ConvertFromArray">
                <q2:Size>
                  <q2:Width>1</q2:Width>
                  <q2:Height>4</q2:Height>
                </q2:Size>
                <q2:Depth>F32</q2:Depth>
                <q2:Channels>1</q2:Channels>
              </Combinator>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Source.Capture</Selector>
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge>
              <From>0</From>
              <To>3</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>1</From>
              <To>0</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>2</From>
              <To>1</To>
              <Label>Source1</Label>
            </Edge>
          </Edges>
        </Workflow>
      </Expression>
    </Nodes>
    <Edges>
      <Edge>
        <From>0</From>
        <To>1</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>0</From>
        <To>2</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>0</From>
        <To>3</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>0</From>
        <To>4</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>1</From>
        <To>8</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>2</From>
        <To>7</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>3</From>
        <To>6</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>4</From>
        <To>5</To>
        <Label>Source1</Label>
      </Edge>
    </Edges>
  </Workflow>
  <ExtensionTypes>
    <Type>Bonsai.HiveTracker.BinaryCapture, Bonsai.HiveTracker, Version=0.1.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.Zip, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.LogicalAndBuilder, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.EqualBuilder, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.IntProperty, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Dsp.ConvertFromArray, Bonsai.Dsp, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
  </ExtensionTypes>
</WorkflowBuilder>